CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Select again all the files in the `tiff` folder']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_probability.tiff")
    Name to assign these images:ProbabStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:ProbabStack
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Bg
    Convert green to gray?:Yes
    Name the output image:Nuc
    Convert blue to gray?:Yes
    Name the output image:Cyto
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
Smooth:[module_num:6|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
    Select the input image:Nuc
    Name the output image:SmoothNuc
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:6
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:SmoothNuc
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.08,1.0
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:Nuclei
    Name the output image:smooth_primary
    Select the color format:Grayscale
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:Yes
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    Name the output image:smooth_primary_outline
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:smooth_primary_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_smooth_primary
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|MYDATA/KKLab1/IMC/T2DM_nPOD/CellProfiler_output/2_Mask_output/1_smooth
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:12|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
    Select the objects to filter:Nuclei
    Name the output objects:NucleiFil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:NucleiFil
    Name the output image:nuc_mask
    Select the color format:Grayscale
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:nuc_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuc_mask
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|MYDATA/KKLab1/IMC/T2DM_nPOD/CellProfiler_output/2_Mask_output/2_mask
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExpandOrShrinkObjects:[module_num:15|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
    Select the input objects:NucleiFil
    Name the output objects:ShrunkenNuclei
    Select the operation:Add partial dividing lines between objects
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
ConvertObjectsToImage:[module_num:16|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
    Select the input objects:ShrunkenNuclei
    Name the output image:nuc_mask_shrunken
    Select the color format:Grayscale
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:nuc_mask_shrunken
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:nuc_mask_shrunken
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|MYDATA/KKLab1/IMC/T2DM_nPOD/CellProfiler_output/2_Mask_output/3_shrunk
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
Smooth:[module_num:18|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
    Select the input image:Cyto
    Name the output image:CytoFil
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifySecondaryObjects:[module_num:19|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
    Select the input objects:NucleiFil
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:CytoFil
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1, 1.0
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
MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:Cells
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:21|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
    Select the objects to filter:Cells
    Name the output objects:cell_fil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:15
    Filter using a maximum measurement value?:No
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
ExpandOrShrinkObjects:[module_num:22|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
    Select the input objects:cell_fil
    Name the output objects:cell_divided_2x
    Select the operation:Add partial dividing lines between objects
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
ConvertObjectsToImage:[module_num:23|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
    Select the input objects:cell_divided_2x
    Name the output image:cells_image_2x
    Select the color format:Grayscale
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:cells_image_2x
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell_mask_2x
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|MYDATA/KKLab1/IMC/T2DM_nPOD/CellProfiler_output/2_Mask_output/4_plus
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:25|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
    Select the input objects:cell_fil
    Name the output image:cell_mask_fil
    Select the color format:Grayscale
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
Resize:[module_num:26|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
    Select the input image:cell_mask_fil
    Name the output image:resized_cell_mask
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:resized_cell_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell_mask_resize_image
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|MYDATA/KKLab1/IMC/T2DM_nPOD/CellProfiler_output/2_Mask_output/5_resize_image
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ConvertImageToObjects:[module_num:28|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
    Select the input image:resized_cell_mask
    Name the output object:resized_cell_mask_object
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:Yes
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    Name the output image:cell_fil_outline_resized
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:resized_cell_mask_object

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:cell_fil_outline_resized
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell_mask_resize_image_outline
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|MYDATA/KKLab1/IMC/T2DM_nPOD/CellProfiler_output/2_Mask_output/6_outline
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:cell_fil_outline_resized
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbabStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell_mask_resize_image_outline
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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