CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Choose the whole `tiffs` folder.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "allchannels")
    Name to assign these images:FullStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "cell_mask")
    Name to assign these images:cellmask
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:['Somehow converting in NamesAndTypes does not work in 3.1.5.', 'Thus I load the image here and then relabel.']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
    Select the input image:cellmask
    Name the output object:cell
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectIntensity Multichannel:[module_num:6|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notes:['Measures the object intensities. Each channel will have a number corresponding to the plane number. The metals corresponding to the indices, e.g. _c1, _c2, can be found by looking at the `_full.csv` files in the `tiffs` folder.’', '', 'Adapt the number of channels corresponding to the number of planes in the stack. Can be again seen in the  `_full.csv` files in the `tiffs` folder.’']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
    Hidden:1
    Select an image to measure:FullStack
    Number of channels:46
    Select objects to measure:cell

ExportToSpreadsheet:[module_num:7|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notes:['Save the data to csv.', 'Note that the intensity values are all scaled by a scaling factor corresponding to the bit depth (can be found in the Image.csv ‘Scale’ column.', 'For uint16 everything is divided by 2**16 = 65535']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|MYDATA/KKLab1/IMC/T2DM_nPOD/CellProfiler_output/3_Intensity_output/intensity
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:cell|Intensity_MeanIntensity_FullStack_c10,cell|Intensity_MeanIntensity_FullStack_c29,cell|Intensity_MeanIntensity_FullStack_c37,cell|Intensity_MeanIntensity_FullStack_c24,cell|Intensity_MeanIntensity_FullStack_c19,cell|Intensity_MeanIntensity_FullStack_c18,cell|Intensity_MeanIntensity_FullStack_c39,cell|Intensity_MeanIntensity_FullStack_c38,cell|Intensity_MeanIntensity_FullStack_c26,cell|Intensity_MeanIntensity_FullStack_c13,cell|Intensity_MeanIntensity_FullStack_c34,cell|Intensity_MeanIntensity_FullStack_c11,cell|Intensity_MeanIntensity_FullStack_c4,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CP_Meanintensity_NPOD6282_Head__ROI3_
    Overwrite existing files without warning?:No
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