CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CD99")
    Name to assign these images:CD99
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Collagen")
    Name to assign these images:Collagen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:CD99
    Name the output object:islet
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:islet
    Name the output objects:expanislet
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:50
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:expanislet
    Name the output image:expanislet_img
    Select the color format:Binary (black & white)
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Collagen
    Name the primary objects to be identified:collagen
    Typical diameter of objects, in pixel units (Min,Max):5,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:collagen
    Name the output image:collagen_img
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:10|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
    Operation:And
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:collagen_islet_mask
    Image or measurement?:Image
    Select the first image:expanislet_img
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:collagen_img
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:11|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
    Select the input image:collagen_islet_mask
    Name the output object:relate_collagen
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:relate_collagen
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:collagen_islet_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:Collagen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:mask
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|MYDATA/Cellprofiler_output/collagen_islet_mask_2021220
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|MYDATA/Cellprofiler_output/collagen_islet_mask_2021220
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_CD99,relate_collagen|AreaShape_Area,relate_collagen|AreaShape_Center_Y,relate_collagen|AreaShape_Center_X
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:5_
    Overwrite existing files without warning?:Yes
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