CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Name>.*)_164Dy_CD99.ome_s2
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:CD99
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:CD99
    Conversion method:Split
    Image type:Channels
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    Channel count:1
    Channel number:1
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    Image name:Channel1

Resize:[module_num:6|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
    Select the input image:Channel1
    Name the output image:ReC1
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:ReC1
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:CD99_object_image
    Select the color format:Binary (black & white)
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
Threshold:[module_num:9|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
    Select the input image:CD99_object_image
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:10|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
    Select the input image:CD99_object_image
    Name the output object:islet
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:islet
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:12|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
    Select the objects to filter:islet
    Name the output objects:islet_fil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_MaximumRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:15
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:islet_fil
    Name the output image:islet_fil_img
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:14|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notes:['^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])']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
    Select the type of image to save:Image
    Select the image to save:islet_fil_img
    Select method for constructing file names:Single name
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    Enter single file name:\g<Name>_CD99_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|Z:\\\\MYDATA\\\\KKLab1\\\\IMC\\\\T2DM_nPOD\\\\CellProfiler_output\\\\2_Mask_output\\\\2_mask_CD99_good\\\\add_cd99step2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
