CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Choose the whole `tiffs` folder.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CD99")
    Name to assign these images:islet_mask
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:islet_mask
    Name the output object:islet_prima
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:islet_prima
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder|Z:\\\\MYDATA\\\\KKLab1\\\\IMC\\\\T2DM_nPOD\\\\CellProfiler_output\\\\3_Intensity_output\\\\Area
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:islet_prima|Number_Object_Number,islet_prima|AreaShape_Center_Y,islet_prima|AreaShape_Center_X,islet_prima|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:T2D_islet0817_TW
    Overwrite existing files without warning?:No
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