CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CD99")
    Name to assign these images:CD99
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:CD99
    Name the output object:islet
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:islet
    Name the output objects:expanislet
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:30
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:expanislet
    Name the output image:expanislet_img
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:subtract_islet_mask
    Image or measurement?:Image
    Select the first image:expanislet_img
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CD99
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:9|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
    Select the input image:subtract_islet_mask
    Name the output object:subtract_islet
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:subtract_islet
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:subtract_islet_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:CD99
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nearislet
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|MYDATA/Cellprofiler_output/nearisletarea_20210117
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|MYDATA/Cellprofiler_output/nearisletarea_20210117
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_CD99,subtract_islet|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:all
    Overwrite existing files without warning?:Yes
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